<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource />
          <mx:SampleRate>30000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1</mx:BufferSize>
          <mx:SamplesPerRead>-1</mx:SamplesPerRead>
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai0</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.DateTime</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\ilow1\Documents\aronov_lab\data\antidromic_stim\CHC157\SYNC.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="5" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>